def model CardiovascularSystem as
  def import using "Units.cellml" for
    unit m3 using unit m3;
    unit m3_per_s using unit m3_per_s;
    unit m3_per_s2 using unit m3_per_s2;
    unit m6_per_J using unit m6_per_J;
    unit m_per_s2 using unit m_per_s2;
    unit per_m using unit per_m;
    unit J_per_m3 using unit J_per_m3;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit J_per_s using unit J_per_s;
    unit J_per_m6 using unit J_per_m6;
    unit Js_per_m3 using unit Js_per_m3;
    unit UnitValve using unit UnitValve;
    unit mol_per_s using unit mol_per_s;
  enddef;
  def import using "Parameters86.cellml" for
    comp Parameters_Systemic using comp Parameters_Systemic;
    comp Parameters_Pulmonary using comp Parameters_Pulmonary;
    comp Parameters_Heart using comp Parameters_Heart;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // ------------ Systemic Circulation ------------//

  def comp Systemic as
    var t: second {priv: out, pub: in};
    // Constitutive Parameters
    var C_svl: m6_per_J {priv: in};
    var C_svn: m6_per_J {priv: in};
    var C_svc: m6_per_J {priv: in};
    var C_ivl: m6_per_J {priv: in};
    var C_ivn: m6_per_J {priv: in};
    var C_ivc: m6_per_J {priv: in};
    var R_svl: Js_per_m6 {priv: in};
    var R_svn: Js_per_m6 {priv: in};
    var R_svc: Js_per_m6 {priv: in};
    var R_ivl: Js_per_m6 {priv: in};
    var R_ivn: Js_per_m6 {priv: in};
    var R_ivc: Js_per_m6 {priv: in};
    var I_svl: Js2_per_m6 {priv: in};
    var I_svn: Js2_per_m6 {priv: in};
    var I_svc: Js2_per_m6 {priv: in};
    var I_ivl: Js2_per_m6 {priv: in};
    var I_ivn: Js2_per_m6 {priv: in};
    var I_ivc: Js2_per_m6 {priv: in};
    var alpha: dimensionless {init: 1, priv: out};
    // State Variables
    var u_root: J_per_m3 {priv: in, pub: out};
    var v_aov: m3_per_s {priv: out, pub: in};
    var u_ra: J_per_m3 {pub: in};
    var u_svl: J_per_m3 {init: 100, priv: out};
    var u_svn: J_per_m3 {init: 0.0, priv: out};
    var u_svc: J_per_m3 {init: 0.0, priv: out};
    var u_ivl: J_per_m3 {init: 100, priv: out};
    var u_ivn: J_per_m3 {init: 0.0, priv: out};
    var u_ivc: J_per_m3 {init: 0.0, priv: out};
    var v_svl: m3_per_s {init: 0.0, priv: out};
    var v_svn: m3_per_s {init: 0.0, priv: out};
    var v_svc: m3_per_s {init: 0.0, priv: out};
    var v_ivl: m3_per_s {init: 0.0, priv: out};
    var v_ivn: m3_per_s {init: 0.0, priv: out};
    var v_ivc: m3_per_s {init: 0.0, priv: out};
    var v_sup_vc: m3_per_s {pub: out};
    var v_inf_vc: m3_per_s {pub: out};
    var v_chest: m3_per_s {pub: out};
    var v_trunk: m3_per_s {pub: out};
    var v_kidneys: m3_per_s {pub: out};
    var v_intestines: m3_per_s {pub: out};
    var v_legs: m3_per_s {pub: out};
    var v_arms: m3_per_s {pub: out};
    var v_head: m3_per_s {pub: out};
    var v_posterior_intercostal_T1_R98: m3_per_s {priv: in};
    var v_posterior_intercostal_T1_L102: m3_per_s {priv: in};
    var v_posterior_intercostal_T2_R106: m3_per_s {priv: in};
    var v_posterior_intercostal_T2_L110: m3_per_s {priv: in};
    var v_left_gastric_T3_C120: m3_per_s {priv: in};
    var v_dorsal_pancreatic_T1_C124: m3_per_s {priv: in};
    var v_splenic_T2_C126: m3_per_s {priv: in};
    var v_hepatic_artery_proper_left_branch_C132: m3_per_s {priv: in};
    var v_hepatic_artery_proper_right_branch_C134: m3_per_s {priv: in};
    var v_middle_colic_T8_C140: m3_per_s {priv: in};
    var v_jejunal_3_T10_C144: m3_per_s {priv: in};
    var v_jejunal_6_T11_C148: m3_per_s {priv: in};
    var v_ileocolic_T9_C152: m3_per_s {priv: in};
    var v_ileal_4_T12_C156: m3_per_s {priv: in};
    var v_ileal_6_T13_C160: m3_per_s {priv: in};
    var v_superior_mesenteric_T4_C162: m3_per_s {priv: in};
    var v_inferior_segmental_T5_L170: m3_per_s {priv: in};
    var v_superior_segmental_T4_L172: m3_per_s {priv: in};
    var v_renal_posterior_branch_T3_L174: m3_per_s {priv: in};
    var v_superior_segmental_T4_R182: m3_per_s {priv: in};
    var v_inferior_segmental_T5_R184: m3_per_s {priv: in};
    var v_renal_posterior_branch_T3_R186: m3_per_s {priv: in};
    var v_inferior_mesenteric_T5_C190: m3_per_s {priv: in};
    var v_internal_iliac_T1_R218: m3_per_s {priv: in};
    var v_profundus_T2_R224: m3_per_s {priv: in};
    var v_anterior_tibial_T3_R230: m3_per_s {priv: in};
    var v_posterior_tibial_T4_R236: m3_per_s {priv: in};
    var v_internal_iliac_T1_L196: m3_per_s {priv: in};
    var v_profundus_T2_L202: m3_per_s {priv: in};
    var v_anterior_tibial_T3_L208: m3_per_s {priv: in};
    var v_posterior_tibial_T4_L214: m3_per_s {priv: in};
    var v_posterior_interosseous_T3_R40: m3_per_s {priv: in};
    var v_ulnar_T2_R42: m3_per_s {priv: in};
    var v_radial_T1_R44: m3_per_s {priv: in};
    var v_posterior_interosseous_T3_L88: m3_per_s {priv: in};
    var v_ulnar_T2_L90: m3_per_s {priv: in};
    var v_radial_T1_L92: m3_per_s {priv: in};
    var v_external_carotid_T2_R26: m3_per_s {priv: in};
    var v_external_carotid_T2_L62: m3_per_s {priv: in};
    var v_internal_carotid_R8: m3_per_s {priv: in};
    var v_internal_carotid_L50: m3_per_s {priv: in};
    var v_vertebral_R272: m3_per_s {priv: in};
    var v_vertebral_L2: m3_per_s {priv: in};
    // Constitutive Relations
    ode(u_svl, t) = (v_sup_vc-v_svl)/C_svl;
    ode(u_ivl, t) = (v_inf_vc-v_ivl)/C_ivl;
    ode(u_svn, t) = (v_svl-v_svn)/C_svn;
    ode(u_svc, t) = (v_svn-v_svc)/C_svc;
    ode(u_ivn, t) = (v_ivl-v_ivn)/C_ivn;
    ode(u_ivc, t) = (v_ivn-v_ivc)/C_ivc;
    ode(v_svl, t) = (u_svl-u_svn-v_svl*R_svl)/I_svl;
    ode(v_svn, t) = (u_svn-u_svc-v_svn*R_svn)/I_svn;
    ode(v_svc, t) = (u_svc-u_ra-v_svc*R_svc)/I_svc;
    ode(v_ivl, t) = (u_ivl-u_ivn-v_ivl*R_ivl)/I_ivl;
    ode(v_ivn, t) = (u_ivn-u_ivc-v_ivn*R_ivn)/I_ivn;
    ode(v_ivc, t) = (u_ivc-u_ra-v_ivc*R_ivc)/I_ivc;
    // Conservation Laws
    v_chest = v_posterior_intercostal_T1_R98+v_posterior_intercostal_T1_L102+v_posterior_intercostal_T2_R106+v_posterior_intercostal_T2_L110;
    v_trunk = v_left_gastric_T3_C120+v_dorsal_pancreatic_T1_C124+v_splenic_T2_C126+v_hepatic_artery_proper_left_branch_C132+v_hepatic_artery_proper_right_branch_C134;
    v_intestines = v_middle_colic_T8_C140+v_jejunal_3_T10_C144+v_jejunal_6_T11_C148+v_ileocolic_T9_C152+v_ileal_4_T12_C156+v_ileal_6_T13_C160+v_superior_mesenteric_T4_C162+v_inferior_mesenteric_T5_C190;
    v_kidneys = v_inferior_segmental_T5_L170+v_superior_segmental_T4_L172+v_renal_posterior_branch_T3_L174+v_superior_segmental_T4_R182+v_inferior_segmental_T5_R184+v_renal_posterior_branch_T3_R186;
    v_legs = v_internal_iliac_T1_R218+v_profundus_T2_R224+v_anterior_tibial_T3_R230+v_posterior_tibial_T4_R236+v_internal_iliac_T1_L196+v_profundus_T2_L202+v_anterior_tibial_T3_L208+v_posterior_tibial_T4_L214;
    v_arms = v_posterior_interosseous_T3_R40+v_ulnar_T2_R42+v_radial_T1_R44+v_posterior_interosseous_T3_L88+v_ulnar_T2_L90+v_radial_T1_L92;
    v_head = v_external_carotid_T2_R26+v_external_carotid_T2_L62+v_internal_carotid_R8+v_internal_carotid_L50+v_vertebral_R272+v_vertebral_L2;
    v_sup_vc = v_arms+v_head;
    v_inf_vc = v_chest+v_trunk+v_intestines+v_kidneys+v_legs;
  enddef;
  // ------------ Pulmonary Circulation ------------//

  def comp Pulmonary as
    var t: second {pub: in};
    // Constitutive Parameters
    var C_pas: m6_per_J {priv: in};
    var C_pat: m6_per_J {priv: in};
    var C_par: m6_per_J {priv: in};
    var C_pcp: m6_per_J {priv: in};
    var C_pvn: m6_per_J {priv: in};
    var C_pvc: m6_per_J {priv: in};
    var R_pas: Js_per_m6 {priv: in};
    var R_pat: Js_per_m6 {priv: in};
    var R_par: Js_per_m6 {priv: in};
    var R_pcp: Js_per_m6 {priv: in};
    var R_pvn: Js_per_m6 {priv: in};
    var I_pas: Js2_per_m6 {priv: in};
    var I_pat: Js2_per_m6 {priv: in};
    var I_par: Js2_per_m6 {priv: in};
    var I_pcp: Js2_per_m6 {priv: in};
    var I_pvn: Js2_per_m6 {priv: in};
    // State Variables
    var u_pas: J_per_m3 {init: 4000.0, pub: out};
    var u_pat: J_per_m3 {init: 0.0, pub: out};
    var u_par: J_per_m3 {init: 0.0, pub: out};
    var u_pcp: J_per_m3 {init: 0.0, pub: out};
    var u_pvn: J_per_m3 {init: 0.0, pub: out};
    var u_la: J_per_m3 {pub: in};
    var v_pas: m3_per_s {init: 0.0, pub: out};
    var v_pat: m3_per_s {init: 0.0, pub: out};
    var v_par: m3_per_s {init: 0.0, pub: out};
    var v_pcp: m3_per_s {init: 0.0, pub: out};
    var v_pvn: m3_per_s {init: 0.0, pub: out};
    var v_puv: m3_per_s {pub: in};
    // Constitutive Relations
    ode(u_pas, t) = (v_puv-v_pas)/C_pas;
    ode(u_pat, t) = (v_pas-v_pat)/C_pat;
    ode(u_par, t) = (v_pat-v_par)/C_par;
    ode(u_pcp, t) = (v_par-v_pcp)/C_pcp;
    ode(u_pvn, t) = (v_pcp-v_pvn)/C_pvn;
    ode(v_pas, t) = (u_pas-u_pat-v_pas*R_pas)/I_pas;
    ode(v_pat, t) = (u_pat-u_par-v_pat*R_pat)/I_pat;
    ode(v_par, t) = (u_par-u_pcp-v_par*R_par)/I_par;
    ode(v_pcp, t) = (u_pcp-u_pvn-v_pcp*R_pcp)/I_pcp;
    ode(v_pvn, t) = (u_pvn-u_la-v_pvn*R_pvn)/I_pvn;
  enddef;
  // ------------ Heart ------------//

  def comp Heart as
    var t: second {pub: in};
    // Constitutive Parameters
    var mt: second;
    var mta: second;
    var T: second {priv: in};
    var CQ_trv: UnitValve {priv: in};
    var CQ_puv: UnitValve {priv: in};
    var CQ_miv: UnitValve {priv: in};
    var CQ_aov: UnitValve {priv: in};
    var q_ra_0: m3 {priv: in};
    var q_rv_0: m3 {priv: in};
    var q_la_0: m3 {priv: in};
    var q_lv_0: m3 {priv: in};
    var E_lv_max: J_per_m6 {priv: in};
    var E_lv_min: J_per_m6 {priv: in};
    var E_la_max: J_per_m6 {priv: in};
    var E_la_min: J_per_m6 {priv: in};
    var E_rv_max: J_per_m6 {priv: in};
    var E_rv_min: J_per_m6 {priv: in};
    var E_ra_max: J_per_m6 {priv: in};
    var E_ra_min: J_per_m6 {priv: in};
    var tau_1_lv: dimensionless {priv: in};
    var tau_2_lv: dimensionless {priv: in};
    var tau_1_la: dimensionless {priv: in};
    var tau_2_la: dimensionless {priv: in};
    var tau_1_rv: dimensionless {priv: in};
    var tau_2_rv: dimensionless {priv: in};
    var tau_1_ra: dimensionless {priv: in};
    var tau_2_ra: dimensionless {priv: in};
    var m_1_lv: dimensionless {priv: in};
    var m_2_lv: dimensionless {priv: in};
    var m_1_la: dimensionless {priv: in};
    var m_2_la: dimensionless {priv: in};
    var m_1_rv: dimensionless {priv: in};
    var m_2_rv: dimensionless {priv: in};
    var m_1_ra: dimensionless {priv: in};
    var m_2_ra: dimensionless {priv: in};
    var g_1_lv: dimensionless;
    var g_2_lv: dimensionless;
    var g_1_la: dimensionless;
    var g_2_la: dimensionless;
    var g_1_rv: dimensionless;
    var g_2_rv: dimensionless;
    var g_1_ra: dimensionless;
    var g_2_ra: dimensionless;
    var t_onset_a: dimensionless {priv: in};
    var E_lv: J_per_m6;
    var E_la: J_per_m6;
    var E_rv: J_per_m6;
    var E_ra: J_per_m6;
    var H_la: dimensionless;
    var H_lv: dimensionless;
    var H_ra: dimensionless;
    var H_rv: dimensionless;
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3;
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {init: 0};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s;
    var v_puv: m3_per_s {pub: out};
    var v_miv: m3_per_s;
    var v_aov: m3_per_s {pub: out};
    var v_sup_vc: m3_per_s {pub: in};
    var v_inf_vc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var q_lv: m3 {init: 380.134e-6};
    var q_rv: m3 {init: 380.134e-6};
    var q_la: m3 {init: 30e-6};
    var q_ra: m3 {init: 30e-6};
    var To: J_per_m3;
    var To_pk: dimensionless {init: 5};
    var To_max: dimensionless {init: 15};
    H_lv = pow((tau_1_lv+tau_2_lv)/(tau_1_lv+tau_1_lv), m_1_lv)/(pow((tau_1_lv+tau_2_lv)/(tau_1_lv+tau_1_lv), m_1_lv)+1{dimensionless})*1{dimensionless}/(pow((tau_1_lv+tau_2_lv)/(tau_2_lv+tau_2_lv), m_2_lv)+1{dimensionless});
    H_la = pow((tau_1_la+tau_2_la)/(tau_1_la+tau_1_la), m_1_la)/(pow((tau_1_la+tau_2_la)/(tau_1_la+tau_1_la), m_1_la)+1{dimensionless})*1{dimensionless}/(pow((tau_1_la+tau_2_la)/(tau_2_la+tau_2_la), m_2_la)+1{dimensionless});
    H_rv = pow((tau_1_rv+tau_2_rv)/(tau_1_rv+tau_1_rv), m_1_rv)/(pow((tau_1_rv+tau_2_rv)/(tau_1_rv+tau_1_rv), m_1_rv)+1{dimensionless})*1{dimensionless}/(pow((tau_1_rv+tau_2_rv)/(tau_2_rv+tau_2_rv), m_2_rv)+1{dimensionless});
    H_ra = pow((tau_1_ra+tau_2_ra)/(tau_1_ra+tau_1_ra), m_1_ra)/(pow((tau_1_ra+tau_2_ra)/(tau_1_ra+tau_1_ra), m_1_ra)+1{dimensionless})*1{dimensionless}/(pow((tau_1_ra+tau_2_ra)/(tau_2_ra+tau_2_ra), m_2_ra)+1{dimensionless});
    E_lv = (E_lv_max-E_lv_min)*g_1_lv/((g_1_lv+1{dimensionless})*(g_2_lv+1{dimensionless})*H_lv)+E_lv_min;
    g_1_lv = pow(mt/(tau_1_lv*T), m_1_lv);
    g_2_lv = pow(mt/(tau_2_lv*T), m_2_lv);
    E_la = (E_la_max-E_la_min)*g_1_la/((g_1_la+1{dimensionless})*(g_2_la+1{dimensionless})*H_la)+E_la_min;
    g_1_la = pow(mta/(tau_1_la*T), m_1_la);
    g_2_la = pow(mta/(tau_2_la*T), m_2_la);
    E_rv = (E_rv_max-E_rv_min)*g_1_rv/((g_1_rv+1{dimensionless})*(g_2_rv+1{dimensionless})*H_rv)+E_rv_min;
    g_1_rv = pow(mt/(tau_1_rv*T), m_1_rv);
    g_2_rv = pow(mt/(tau_2_rv*T), m_2_rv);
    E_ra = (E_ra_max-E_ra_min)*g_1_ra/((g_1_ra+1{dimensionless})*(g_2_ra+1{dimensionless})*H_ra)+E_ra_min;
    g_1_ra = pow(mta/(tau_1_ra*T), m_1_ra);
    g_2_ra = pow(mta/(tau_2_ra*T), m_2_ra);
    // Elastance Functions
    // To = To_max*exp(0.5{dimensionless})*t/To_pk*exp(-0.5{dimensionless}*sqr(t/To_pk));
    To = E_lv/2.4e4{dimensionless};
    mt = t-T*floor(t/T);
    mta = t-t_onset_a*T-T*floor((t-t_onset_a*T)/T);
    // Constitutive Relations
    v_trv = sel
      case u_ra >= u_rv:
        CQ_trv*sqrt(u_ra-u_rv);
      case u_ra < u_rv:
        0.0{m3_per_s};
    endsel;
    v_puv = sel
      case u_rv >= u_par:
        CQ_puv*sqrt(u_rv-u_par);
      case u_rv < u_par:
        0.0{m3_per_s};
    endsel;
    v_miv = sel
      case u_la >= u_lv:
        CQ_miv*sqrt(u_la-u_lv);
      case u_la < u_lv:
        0.0{m3_per_s};
    endsel;
    v_aov = sel
      case u_lv >= u_root:
        CQ_aov*sqrt(u_lv-u_root);
      case u_lv < u_root:
        0.0{m3_per_s};
    endsel;
    u_ra = E_ra*(q_ra-q_ra_0);
    u_rv = E_rv*(q_rv-q_rv_0);
    u_la = E_la*(q_la-q_la_0);
    // u_lv = E_lv*(q_lv-q_lv_0);
    // Conservation Laws
    ode(q_ra, t) = v_sup_vc+v_inf_vc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
  enddef;
  // ------------ Mapping ------------//
  def map between Heart and Systemic for
    vars v_sup_vc and v_svc;
    vars v_inf_vc and v_ivc;
    vars u_ra and u_ra;
    vars u_root and u_root;
    vars v_aov and v_aov;
  enddef;
  def map between Heart and Pulmonary for
    vars u_par and u_pas;
    vars v_pvn and v_pvn;
    vars u_la and u_la;
    vars v_puv and v_puv;
  enddef;
  def map between Parameters_Systemic and Systemic for
    vars C_svl and C_svl;
    vars C_svn and C_svn;
    vars C_svc and C_svc;
    vars C_ivl and C_ivl;
    vars C_ivn and C_ivn;
    vars C_ivc and C_ivc;
    vars R_svl and R_svl;
    vars R_svn and R_svn;
    vars R_svc and R_svc;
    vars R_ivl and R_ivl;
    vars R_ivn and R_ivn;
    vars R_ivc and R_ivc;
    vars I_svl and I_svl;
    vars I_svn and I_svn;
    vars I_svc and I_svc;
    vars I_ivl and I_ivl;
    vars I_ivn and I_ivn;
    vars I_ivc and I_ivc;
  enddef;
  def map between Parameters_Pulmonary and Pulmonary for
    vars C_pas and C_pas;
    vars C_pat and C_pat;
    vars C_par and C_par;
    vars C_pcp and C_pcp;
    vars C_pvn and C_pvn;
    vars C_pvc and C_pvc;
    vars R_pas and R_pas;
    vars R_pat and R_pat;
    vars R_par and R_par;
    vars R_pcp and R_pcp;
    vars R_pvn and R_pvn;
    vars I_pas and I_pas;
    vars I_pat and I_pat;
    vars I_par and I_par;
    vars I_pcp and I_pcp;
    vars I_pvn and I_pvn;
  enddef;
  def map between Parameters_Heart and Heart for
    vars T and T;
    vars CQ_trv and CQ_trv;
    vars CQ_puv and CQ_puv;
    vars CQ_miv and CQ_miv;
    vars CQ_aov and CQ_aov;
    vars E_lv_max and E_lv_max;
    vars E_lv_min and E_lv_min;
    vars E_la_max and E_la_max;
    vars E_la_min and E_la_min;
    vars E_rv_max and E_rv_max;
    vars E_rv_min and E_rv_min;
    vars E_ra_max and E_ra_max;
    vars E_ra_min and E_ra_min;
    vars tau_1_lv and tau_1_lv;
    vars tau_2_lv and tau_2_lv;
    vars tau_1_la and tau_1_la;
    vars tau_2_la and tau_2_la;
    vars tau_1_rv and tau_1_rv;
    vars tau_2_rv and tau_2_rv;
    vars tau_1_ra and tau_1_ra;
    vars tau_2_ra and tau_2_ra;
    vars m_1_lv and m_1_lv;
    vars m_2_lv and m_2_lv;
    vars m_1_la and m_1_la;
    vars m_2_la and m_2_la;
    vars m_1_rv and m_1_rv;
    vars m_2_rv and m_2_rv;
    vars m_1_ra and m_1_ra;
    vars m_2_ra and m_2_ra;
    vars t_onset_a and t_onset_a;
    vars q_ra_0 and q_ra_0;
    vars q_rv_0 and q_rv_0;
    vars q_la_0 and q_la_0;
    vars q_lv_0 and q_lv_0;
  enddef;
  def map between environment and Heart for
    vars time and t;
  enddef;
  def map between environment and Systemic for
    vars time and t;
  enddef;
  def map between environment and Pulmonary for
    vars time and t;
  enddef;
  // Terminal
  def map between Systemic and posterior_intercostal_T1_R98_module for
    vars u_ivl and u_out;
    vars v_posterior_intercostal_T1_R98 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and posterior_intercostal_T1_L102_module for
    vars u_ivl and u_out;
    vars v_posterior_intercostal_T1_L102 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and posterior_intercostal_T2_R106_module for
    vars u_ivl and u_out;
    vars v_posterior_intercostal_T2_R106 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and posterior_intercostal_T2_L110_module for
    vars u_ivl and u_out;
    vars v_posterior_intercostal_T2_L110 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and left_gastric_T3_C120_module for
    vars u_ivl and u_out;
    vars v_left_gastric_T3_C120 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and dorsal_pancreatic_T1_C124_module for
    vars u_ivl and u_out;
    vars v_dorsal_pancreatic_T1_C124 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and splenic_T2_C126_module for
    vars u_ivl and u_out;
    vars v_splenic_T2_C126 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and hepatic_artery_proper_left_branch_C132_module for
    vars u_ivl and u_out;
    vars v_hepatic_artery_proper_left_branch_C132 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and hepatic_artery_proper_right_branch_C134_module for
    vars u_ivl and u_out;
    vars v_hepatic_artery_proper_right_branch_C134 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and middle_colic_T8_C140_module for
    vars u_ivl and u_out;
    vars v_middle_colic_T8_C140 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and jejunal_3_T10_C144_module for
    vars u_ivl and u_out;
    vars v_jejunal_3_T10_C144 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and jejunal_6_T11_C148_module for
    vars u_ivl and u_out;
    vars v_jejunal_6_T11_C148 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and ileocolic_T9_C152_module for
    vars u_ivl and u_out;
    vars v_ileocolic_T9_C152 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and ileal_4_T12_C156_module for
    vars u_ivl and u_out;
    vars v_ileal_4_T12_C156 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and ileal_6_T13_C160_module for
    vars u_ivl and u_out;
    vars v_ileal_6_T13_C160 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and superior_mesenteric_T4_C162_module for
    vars u_ivl and u_out;
    vars v_superior_mesenteric_T4_C162 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and inferior_segmental_T5_L170_module for
    vars u_ivl and u_out;
    vars v_inferior_segmental_T5_L170 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and superior_segmental_T4_L172_module for
    vars u_ivl and u_out;
    vars v_superior_segmental_T4_L172 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and renal_posterior_branch_T3_L174_module for
    vars u_ivl and u_out;
    vars v_renal_posterior_branch_T3_L174 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and superior_segmental_T4_R182_module for
    vars u_ivl and u_out;
    vars v_superior_segmental_T4_R182 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and inferior_segmental_T5_R184_module for
    vars u_ivl and u_out;
    vars v_inferior_segmental_T5_R184 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and renal_posterior_branch_T3_R186_module for
    vars u_ivl and u_out;
    vars v_renal_posterior_branch_T3_R186 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and inferior_mesenteric_T5_C190_module for
    vars u_ivl and u_out;
    vars v_inferior_mesenteric_T5_C190 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and internal_iliac_T1_R218_module for
    vars u_ivl and u_out;
    vars v_internal_iliac_T1_R218 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and profundus_T2_R224_module for
    vars u_ivl and u_out;
    vars v_profundus_T2_R224 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and anterior_tibial_T3_R230_module for
    vars u_ivl and u_out;
    vars v_anterior_tibial_T3_R230 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and posterior_tibial_T4_R236_module for
    vars u_ivl and u_out;
    vars v_posterior_tibial_T4_R236 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and internal_iliac_T1_L196_module for
    vars u_ivl and u_out;
    vars v_internal_iliac_T1_L196 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and profundus_T2_L202_module for
    vars u_ivl and u_out;
    vars v_profundus_T2_L202 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and anterior_tibial_T3_L208_module for
    vars u_ivl and u_out;
    vars v_anterior_tibial_T3_L208 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and posterior_tibial_T4_L214_module for
    vars u_ivl and u_out;
    vars v_posterior_tibial_T4_L214 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and posterior_interosseous_T3_R40_module for
    vars u_svl and u_out;
    vars v_posterior_interosseous_T3_R40 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and ulnar_T2_R42_module for
    vars u_svl and u_out;
    vars v_ulnar_T2_R42 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and radial_T1_R44_module for
    vars u_svl and u_out;
    vars v_radial_T1_R44 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and posterior_interosseous_T3_L88_module for
    vars u_svl and u_out;
    vars v_posterior_interosseous_T3_L88 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and ulnar_T2_L90_module for
    vars u_svl and u_out;
    vars v_ulnar_T2_L90 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and radial_T1_L92_module for
    vars u_svl and u_out;
    vars v_radial_T1_L92 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and external_carotid_T2_R26_module for
    vars u_svl and u_out;
    vars v_external_carotid_T2_R26 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and external_carotid_T2_L62_module for
    vars u_svl and u_out;
    vars v_external_carotid_T2_L62 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and internal_carotid_R8_module for
    vars u_svl and u_out;
    vars v_internal_carotid_R8 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and internal_carotid_L50_module for
    vars u_svl and u_out;
    vars v_internal_carotid_L50 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and vertebral_R272_module for
    vars u_svl and u_out;
    vars v_vertebral_R272 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  def map between Systemic and vertebral_L2_module for
    vars u_svl and u_out;
    vars v_vertebral_L2 and v_T;
    vars t and t;
    vars alpha and alpha;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Importing Vessels //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta
  def import using "BG_Modules_v2.cellml" for
    comp ascending_aorta_C0_module using comp vv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp aortic_arch_C2_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp brachiocephalic_trunk_C4_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp aortic_arch_C46_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp aortic_arch_C64_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp aortic_arch_C94_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp thoracic_aorta_C96_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp thoracic_aorta_C100_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp thoracic_aorta_C104_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp thoracic_aorta_C108_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp thoracic_aorta_C112_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp abdominal_aorta_C114_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp abdominal_aorta_C136_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp abdominal_aorta_C164_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp abdominal_aorta_C176_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp abdominal_aorta_C188_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp abdominal_aorta_C192_module using comp pv_jII_type;
  enddef;
  // Trunk
  def import using "BG_Modules_v2.cellml" for
    comp posterior_intercostal_T1_R98_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp posterior_intercostal_T1_L102_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp posterior_intercostal_T2_R106_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp posterior_intercostal_T2_L110_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp celiac_trunk_C116_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp splenic_T2_C118_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp left_gastric_T3_C120_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp splenic_T2_C122_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp dorsal_pancreatic_T1_C124_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp splenic_T2_C126_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp common_hepatic_C128_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp hepatic_artery_proper_C130_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp hepatic_artery_proper_left_branch_C132_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp hepatic_artery_proper_right_branch_C134_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp superior_mesenteric_T4_C138_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp middle_colic_T8_C140_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp superior_mesenteric_T4_C142_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp jejunal_3_T10_C144_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp superior_mesenteric_T4_C146_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp jejunal_6_T11_C148_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp superior_mesenteric_T4_C150_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp ileocolic_T9_C152_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp superior_mesenteric_T4_C154_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp ileal_4_T12_C156_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp superior_mesenteric_T4_C158_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp ileal_6_T13_C160_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp superior_mesenteric_T4_C162_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp renal_L166_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp renal_anterior_branch_L168_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp inferior_segmental_T5_L170_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp superior_segmental_T4_L172_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp renal_posterior_branch_T3_L174_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp renal_R178_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp renal_anterior_branch_R180_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp superior_segmental_T4_R182_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp inferior_segmental_T5_R184_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp renal_posterior_branch_T3_R186_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp inferior_mesenteric_T5_C190_module using comp pp_BC_type;
  enddef;
  // Lower Limbs
  def import using "BG_Modules_v2.cellml" for
    comp common_iliac_R216_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp internal_iliac_T1_R218_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp external_iliac_R220_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp femoral_R222_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp profundus_T2_R224_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp femoral_R226_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp popliteal_R228_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp anterior_tibial_T3_R230_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp popliteal_R232_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp tibiofibular_trunk_R234_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp posterior_tibial_T4_R236_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp common_iliac_L194_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp internal_iliac_T1_L196_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp external_iliac_L198_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp femoral_L200_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp profundus_T2_L202_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp femoral_L204_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp popliteal_L206_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp anterior_tibial_T3_L208_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp popliteal_L210_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp tibiofibular_trunk_L212_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp posterior_tibial_T4_L214_module using comp pp_BC_type;
  enddef;
  // Upper Limbs
  def import using "BG_Modules_v2.cellml" for
    comp subclavian_R28_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp subclavian_R30_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp axillary_R32_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp brachial_R34_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp ulnar_T2_R36_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp common_interosseous_R38_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp posterior_interosseous_T3_R40_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp ulnar_T2_R42_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp radial_T1_R44_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp subclavian_L66_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp subclavian_L78_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp axillary_L80_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp brachial_L82_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp ulnar_T2_L84_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp common_interosseous_L86_module using comp pv_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp posterior_interosseous_T3_L88_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp ulnar_T2_L90_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp radial_T1_L92_module using comp pp_BC_type;
  enddef;
  // Head
  def import using "BG_Modules_v2.cellml" for
    comp common_carotid_R6_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp internal_carotid_R8_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp external_carotid_T2_R26_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp common_carotid_L48_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp internal_carotid_L50_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp external_carotid_T2_L62_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp vertebral_L2_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules_v2.cellml" for
    comp vertebral_R272_module using comp pp_BC_type;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ////////////////////////////////////////// Output Modules ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta

  def comp ascending_aorta_C0 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp aortic_arch_C2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp brachiocephalic_trunk_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp aortic_arch_C46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp aortic_arch_C64 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp aortic_arch_C94 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C96 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C100 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C104 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C108 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C136 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C164 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C176 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C188 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C192 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;
  // Trunk

  def comp posterior_intercostal_T1_R98 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T1_L102 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T2_R106 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T2_L110 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp celiac_trunk_C116 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp splenic_T2_C118 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp left_gastric_T3_C120 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp splenic_T2_C122 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp dorsal_pancreatic_T1_C124 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp splenic_T2_C126 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp common_hepatic_C128 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp hepatic_artery_proper_C130 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp hepatic_artery_proper_left_branch_C132 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp hepatic_artery_proper_right_branch_C134 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C138 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp middle_colic_T8_C140 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C142 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp jejunal_3_T10_C144 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C146 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp jejunal_6_T11_C148 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C150 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp ileocolic_T9_C152 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C154 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp ileal_4_T12_C156 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C158 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp ileal_6_T13_C160 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C162 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp renal_L166 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp renal_anterior_branch_L168 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp inferior_segmental_T5_L170 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp superior_segmental_T4_L172 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp renal_posterior_branch_T3_L174 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp renal_R178 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp renal_anterior_branch_R180 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp superior_segmental_T4_R182 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp inferior_segmental_T5_R184 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp renal_posterior_branch_T3_R186 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp inferior_mesenteric_T5_C190 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;
  // Lower Limbs

  def comp common_iliac_R216 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp internal_iliac_T1_R218 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp external_iliac_R220 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp femoral_R222 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp profundus_T2_R224 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp femoral_R226 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp popliteal_R228 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp anterior_tibial_T3_R230 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp popliteal_R232 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp tibiofibular_trunk_R234 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp posterior_tibial_T4_R236 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp common_iliac_L194 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp internal_iliac_T1_L196 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp external_iliac_L198 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp femoral_L200 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp profundus_T2_L202 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp femoral_L204 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp popliteal_L206 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp anterior_tibial_T3_L208 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp popliteal_L210 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp tibiofibular_trunk_L212 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp posterior_tibial_T4_L214 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;
  // Upper Limbs

  def comp subclavian_R28 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp subclavian_R30 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp axillary_R32 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp brachial_R34 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp ulnar_T2_R36 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp common_interosseous_R38 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp posterior_interosseous_T3_R40 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp ulnar_T2_R42 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp radial_T1_R44 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp subclavian_L66 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp subclavian_L78 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp axillary_L80 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp brachial_L82 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp ulnar_T2_L84 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp common_interosseous_L86 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp posterior_interosseous_T3_L88 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp ulnar_T2_L90 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp radial_T1_L92 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;
  // Head

  def comp common_carotid_R6 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp internal_carotid_R8 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp external_carotid_T2_R26 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp common_carotid_L48 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp internal_carotid_L50 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp external_carotid_T2_L62 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp vertebral_L2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;

  def comp vertebral_R272 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var r_p: metre {pub: in};
    var r_d: metre {pub: in};
    var h: metre {pub: in};
    var l: metre {pub: in};
    var q_0: m3 {pub: in};
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ////////////////////////////////////////// Mapping Modules ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Junctions
  def map between aortic_arch_C2_module and brachiocephalic_trunk_C4_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and aortic_arch_C46_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and common_carotid_R6_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and subclavian_R28_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and aortic_arch_C64_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and common_carotid_L48_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and aortic_arch_C94_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and subclavian_L66_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and thoracic_aorta_C100_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and posterior_intercostal_T1_R98_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and thoracic_aorta_C104_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and posterior_intercostal_T1_L102_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and thoracic_aorta_C108_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and posterior_intercostal_T2_R106_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and thoracic_aorta_C112_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and posterior_intercostal_T2_L110_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and abdominal_aorta_C136_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and celiac_trunk_C116_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C136_module and abdominal_aorta_C164_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C136_module and superior_mesenteric_T4_C138_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and abdominal_aorta_C176_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and renal_L166_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and abdominal_aorta_C188_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and renal_R178_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and abdominal_aorta_C192_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and inferior_mesenteric_T5_C190_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_R216_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_L194_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and internal_iliac_T1_R218_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and external_iliac_R220_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between femoral_R222_module and profundus_T2_R224_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between femoral_R222_module and femoral_R226_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_R228_module and anterior_tibial_T3_R230_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_R228_module and popliteal_R232_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and internal_iliac_T1_L196_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and external_iliac_L198_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and profundus_T2_L202_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and femoral_L204_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L206_module and anterior_tibial_T3_L208_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L206_module and popliteal_L210_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and subclavian_R30_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and vertebral_R272_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachial_R34_module and ulnar_T2_R36_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachial_R34_module and radial_T1_R44_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_R36_module and common_interosseous_R38_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_R36_module and ulnar_T2_R42_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and subclavian_L78_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and vertebral_L2_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachial_L82_module and ulnar_T2_L84_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachial_L82_module and radial_T1_L92_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_L84_module and common_interosseous_L86_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_L84_module and ulnar_T2_L90_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_module and internal_carotid_R8_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_module and external_carotid_T2_R26_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_module and internal_carotid_L50_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_module and external_carotid_T2_L62_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between celiac_trunk_C116_module and splenic_T2_C118_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between celiac_trunk_C116_module and left_gastric_T3_C120_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C118_module and splenic_T2_C122_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C118_module and dorsal_pancreatic_T1_C124_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C122_module and splenic_T2_C126_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C122_module and common_hepatic_C128_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between hepatic_artery_proper_C130_module and hepatic_artery_proper_left_branch_C132_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between hepatic_artery_proper_C130_module and hepatic_artery_proper_right_branch_C134_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C138_module and middle_colic_T8_C140_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C138_module and superior_mesenteric_T4_C142_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C142_module and jejunal_3_T10_C144_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C142_module and superior_mesenteric_T4_C146_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C146_module and jejunal_6_T11_C148_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C146_module and superior_mesenteric_T4_C150_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C150_module and ileocolic_T9_C152_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C150_module and superior_mesenteric_T4_C154_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C154_module and ileal_4_T12_C156_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C154_module and superior_mesenteric_T4_C158_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C158_module and ileal_6_T13_C160_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C158_module and superior_mesenteric_T4_C162_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_L166_module and renal_anterior_branch_L168_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_L166_module and renal_posterior_branch_T3_L174_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_L168_module and inferior_segmental_T5_L170_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_L168_module and superior_segmental_T4_L172_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_R178_module and renal_anterior_branch_R180_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_R178_module and renal_posterior_branch_T3_R186_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_R180_module and superior_segmental_T4_R182_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_R180_module and inferior_segmental_T5_R184_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  // Aorta & Trunk
  def map between ascending_aorta_C0_module and aortic_arch_C2_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C94_module and thoracic_aorta_C96_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_C112_module and abdominal_aorta_C114_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_hepatic_C128_module and hepatic_artery_proper_C130_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_R220_module and femoral_R222_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  // Lower Limb
  def map between femoral_R226_module and popliteal_R228_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between popliteal_R232_module and tibiofibular_trunk_R234_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between tibiofibular_trunk_R234_module and posterior_tibial_T4_R236_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_L198_module and femoral_L200_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_L204_module and popliteal_L206_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L210_module and tibiofibular_trunk_L212_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between tibiofibular_trunk_L212_module and posterior_tibial_T4_L214_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  // Upper Limb
  def map between subclavian_R30_module and axillary_R32_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between axillary_R32_module and brachial_R34_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_interosseous_R38_module and posterior_interosseous_T3_R40_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L78_module and axillary_L80_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between axillary_L80_module and brachial_L82_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_interosseous_L86_module and posterior_interosseous_T3_L88_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ////////////////////////////////////////// Output Mapping ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta
  def map between ascending_aorta_C0 and ascending_aorta_C0_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between aortic_arch_C2 and aortic_arch_C2_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between brachiocephalic_trunk_C4 and brachiocephalic_trunk_C4_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between aortic_arch_C46 and aortic_arch_C46_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between aortic_arch_C64 and aortic_arch_C64_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between aortic_arch_C94 and aortic_arch_C94_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between thoracic_aorta_C96 and thoracic_aorta_C96_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between thoracic_aorta_C100 and thoracic_aorta_C100_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between thoracic_aorta_C104 and thoracic_aorta_C104_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between thoracic_aorta_C108 and thoracic_aorta_C108_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between thoracic_aorta_C112 and thoracic_aorta_C112_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between abdominal_aorta_C114 and abdominal_aorta_C114_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between abdominal_aorta_C136 and abdominal_aorta_C136_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between abdominal_aorta_C164 and abdominal_aorta_C164_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between abdominal_aorta_C176 and abdominal_aorta_C176_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between abdominal_aorta_C188 and abdominal_aorta_C188_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between abdominal_aorta_C192 and abdominal_aorta_C192_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  // Trunk
  def map between posterior_intercostal_T1_R98 and posterior_intercostal_T1_R98_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between posterior_intercostal_T1_L102 and posterior_intercostal_T1_L102_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between posterior_intercostal_T2_R106 and posterior_intercostal_T2_R106_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between posterior_intercostal_T2_L110 and posterior_intercostal_T2_L110_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between celiac_trunk_C116 and celiac_trunk_C116_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between splenic_T2_C118 and splenic_T2_C118_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between left_gastric_T3_C120 and left_gastric_T3_C120_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between splenic_T2_C122 and splenic_T2_C122_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between dorsal_pancreatic_T1_C124 and dorsal_pancreatic_T1_C124_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between splenic_T2_C126 and splenic_T2_C126_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between common_hepatic_C128 and common_hepatic_C128_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between hepatic_artery_proper_C130 and hepatic_artery_proper_C130_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between hepatic_artery_proper_left_branch_C132 and hepatic_artery_proper_left_branch_C132_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between hepatic_artery_proper_right_branch_C134 and hepatic_artery_proper_right_branch_C134_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between superior_mesenteric_T4_C138 and superior_mesenteric_T4_C138_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between middle_colic_T8_C140 and middle_colic_T8_C140_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between superior_mesenteric_T4_C142 and superior_mesenteric_T4_C142_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between jejunal_3_T10_C144 and jejunal_3_T10_C144_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between superior_mesenteric_T4_C146 and superior_mesenteric_T4_C146_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between jejunal_6_T11_C148 and jejunal_6_T11_C148_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between superior_mesenteric_T4_C150 and superior_mesenteric_T4_C150_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between ileocolic_T9_C152 and ileocolic_T9_C152_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between superior_mesenteric_T4_C154 and superior_mesenteric_T4_C154_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between ileal_4_T12_C156 and ileal_4_T12_C156_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between superior_mesenteric_T4_C158 and superior_mesenteric_T4_C158_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between ileal_6_T13_C160 and ileal_6_T13_C160_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between superior_mesenteric_T4_C162 and superior_mesenteric_T4_C162_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between renal_L166 and renal_L166_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between renal_anterior_branch_L168 and renal_anterior_branch_L168_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between inferior_segmental_T5_L170 and inferior_segmental_T5_L170_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between superior_segmental_T4_L172 and superior_segmental_T4_L172_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between renal_posterior_branch_T3_L174 and renal_posterior_branch_T3_L174_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between renal_R178 and renal_R178_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between renal_anterior_branch_R180 and renal_anterior_branch_R180_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between superior_segmental_T4_R182 and superior_segmental_T4_R182_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between inferior_segmental_T5_R184 and inferior_segmental_T5_R184_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between renal_posterior_branch_T3_R186 and renal_posterior_branch_T3_R186_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between inferior_mesenteric_T5_C190 and inferior_mesenteric_T5_C190_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  // Lower Limbs
  def map between common_iliac_R216 and common_iliac_R216_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between internal_iliac_T1_R218 and internal_iliac_T1_R218_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between external_iliac_R220 and external_iliac_R220_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between femoral_R222 and femoral_R222_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between profundus_T2_R224 and profundus_T2_R224_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between femoral_R226 and femoral_R226_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between popliteal_R228 and popliteal_R228_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between anterior_tibial_T3_R230 and anterior_tibial_T3_R230_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between popliteal_R232 and popliteal_R232_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between tibiofibular_trunk_R234 and tibiofibular_trunk_R234_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between posterior_tibial_T4_R236 and posterior_tibial_T4_R236_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between common_iliac_L194 and common_iliac_L194_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between internal_iliac_T1_L196 and internal_iliac_T1_L196_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between external_iliac_L198 and external_iliac_L198_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between femoral_L200 and femoral_L200_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between profundus_T2_L202 and profundus_T2_L202_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between femoral_L204 and femoral_L204_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between popliteal_L206 and popliteal_L206_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between anterior_tibial_T3_L208 and anterior_tibial_T3_L208_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between popliteal_L210 and popliteal_L210_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between tibiofibular_trunk_L212 and tibiofibular_trunk_L212_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between posterior_tibial_T4_L214 and posterior_tibial_T4_L214_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  // Upper Limbs
  def map between subclavian_R28 and subclavian_R28_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between subclavian_R30 and subclavian_R30_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between axillary_R32 and axillary_R32_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between brachial_R34 and brachial_R34_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between ulnar_T2_R36 and ulnar_T2_R36_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between common_interosseous_R38 and common_interosseous_R38_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between posterior_interosseous_T3_R40 and posterior_interosseous_T3_R40_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between ulnar_T2_R42 and ulnar_T2_R42_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between radial_T1_R44 and radial_T1_R44_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between subclavian_L66 and subclavian_L66_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between subclavian_L78 and subclavian_L78_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between axillary_L80 and axillary_L80_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between brachial_L82 and brachial_L82_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between ulnar_T2_L84 and ulnar_T2_L84_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between common_interosseous_L86 and common_interosseous_L86_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between posterior_interosseous_T3_L88 and posterior_interosseous_T3_L88_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between ulnar_T2_L90 and ulnar_T2_L90_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between radial_T1_L92 and radial_T1_L92_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  // Head
  def map between common_carotid_R6 and common_carotid_R6_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between internal_carotid_R8 and internal_carotid_R8_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between external_carotid_T2_R26 and external_carotid_T2_R26_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between common_carotid_L48 and common_carotid_L48_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between internal_carotid_L50 and internal_carotid_L50_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between external_carotid_T2_L62 and external_carotid_T2_L62_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between vertebral_L2 and vertebral_L2_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  def map between vertebral_R272 and vertebral_R272_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars r_p and r_p;
    vars r_d and r_d;
    vars h and h;
    vars l and l;
    vars q_0 and q_0;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////// Parameters Mapping //////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta
  def map between Parameters_Systemic and ascending_aorta_C0_module for
    vars l_ascending_aorta_C0 and l;
    vars E_ascending_aorta_C0 and E;
    vars rp_ascending_aorta_C0 and r_p;
    vars rd_ascending_aorta_C0 and r_d;
    vars z_ascending_aorta_C0 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and aortic_arch_C2_module for
    vars l_aortic_arch_C2 and l;
    vars E_aortic_arch_C2 and E;
    vars rp_aortic_arch_C2 and r_p;
    vars rd_aortic_arch_C2 and r_d;
    vars z_aortic_arch_C2 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and brachiocephalic_trunk_C4_module for
    vars l_brachiocephalic_trunk_C4 and l;
    vars E_brachiocephalic_trunk_C4 and E;
    vars rp_brachiocephalic_trunk_C4 and r_p;
    vars rd_brachiocephalic_trunk_C4 and r_d;
    vars z_brachiocephalic_trunk_C4 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and aortic_arch_C46_module for
    vars l_aortic_arch_C46 and l;
    vars E_aortic_arch_C46 and E;
    vars rp_aortic_arch_C46 and r_p;
    vars rd_aortic_arch_C46 and r_d;
    vars z_aortic_arch_C46 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and aortic_arch_C64_module for
    vars l_aortic_arch_C64 and l;
    vars E_aortic_arch_C64 and E;
    vars rd_aortic_arch_C64 and r_d;
    vars rp_aortic_arch_C64 and r_p;
    vars z_aortic_arch_C64 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and aortic_arch_C94_module for
    vars l_aortic_arch_C94 and l;
    vars E_aortic_arch_C94 and E;
    vars rp_aortic_arch_C94 and r_p;
    vars rd_aortic_arch_C94 and r_d;
    vars z_aortic_arch_C94 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C96_module for
    vars l_thoracic_aorta_C96 and l;
    vars E_thoracic_aorta_C96 and E;
    vars rp_thoracic_aorta_C96 and r_p;
    vars rd_thoracic_aorta_C96 and r_d;
    vars z_thoracic_aorta_C96 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C100_module for
    vars l_thoracic_aorta_C100 and l;
    vars E_thoracic_aorta_C100 and E;
    vars rd_thoracic_aorta_C100 and r_d;
    vars rp_thoracic_aorta_C100 and r_p;
    vars z_thoracic_aorta_C100 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C104_module for
    vars l_thoracic_aorta_C104 and l;
    vars E_thoracic_aorta_C104 and E;
    vars rd_thoracic_aorta_C104 and r_d;
    vars rp_thoracic_aorta_C104 and r_p;
    vars z_thoracic_aorta_C104 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C108_module for
    vars l_thoracic_aorta_C108 and l;
    vars E_thoracic_aorta_C108 and E;
    vars rp_thoracic_aorta_C108 and r_p;
    vars rd_thoracic_aorta_C108 and r_d;
    vars z_thoracic_aorta_C108 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C112_module for
    vars l_thoracic_aorta_C112 and l;
    vars E_thoracic_aorta_C112 and E;
    vars rp_thoracic_aorta_C112 and r_p;
    vars rd_thoracic_aorta_C112 and r_d;
    vars z_thoracic_aorta_C112 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C114_module for
    vars l_abdominal_aorta_C114 and l;
    vars E_abdominal_aorta_C114 and E;
    vars rd_abdominal_aorta_C114 and r_d;
    vars rp_abdominal_aorta_C114 and r_p;
    vars z_abdominal_aorta_C114 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C136_module for
    vars l_abdominal_aorta_C136 and l;
    vars E_abdominal_aorta_C136 and E;
    vars rd_abdominal_aorta_C136 and r_d;
    vars rp_abdominal_aorta_C136 and r_p;
    vars z_abdominal_aorta_C136 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C164_module for
    vars l_abdominal_aorta_C164 and l;
    vars E_abdominal_aorta_C164 and E;
    vars rd_abdominal_aorta_C164 and r_d;
    vars rp_abdominal_aorta_C164 and r_p;
    vars z_abdominal_aorta_C164 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C176_module for
    vars l_abdominal_aorta_C176 and l;
    vars E_abdominal_aorta_C176 and E;
    vars rp_abdominal_aorta_C176 and r_p;
    vars rd_abdominal_aorta_C176 and r_d;
    vars z_abdominal_aorta_C176 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C188_module for
    vars l_abdominal_aorta_C188 and l;
    vars E_abdominal_aorta_C188 and E;
    vars rd_abdominal_aorta_C188 and r_d;
    vars rp_abdominal_aorta_C188 and r_p;
    vars z_abdominal_aorta_C188 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C192_module for
    vars l_abdominal_aorta_C192 and l;
    vars E_abdominal_aorta_C192 and E;
    vars rd_abdominal_aorta_C192 and r_d;
    vars rp_abdominal_aorta_C192 and r_p;
    vars z_abdominal_aorta_C192 and theta;
    vars g and g;
  enddef;
  // Trunk
  def map between Parameters_Systemic and celiac_trunk_C116_module for
    vars l_celiac_trunk_C116 and l;
    vars E_celiac_trunk_C116 and E;
    vars rd_celiac_trunk_C116 and r_d;
    vars rp_celiac_trunk_C116 and r_p;
    vars z_celiac_trunk_C116 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and splenic_T2_C118_module for
    vars l_splenic_T2_C118 and l;
    vars E_splenic_T2_C118 and E;
    vars rp_splenic_T2_C118 and r_p;
    vars rd_splenic_T2_C118 and r_d;
    vars z_splenic_T2_C118 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and splenic_T2_C122_module for
    vars l_splenic_T2_C122 and l;
    vars E_splenic_T2_C122 and E;
    vars rp_splenic_T2_C122 and r_p;
    vars rd_splenic_T2_C122 and r_d;
    vars z_splenic_T2_C122 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and common_hepatic_C128_module for
    vars l_common_hepatic_C128 and l;
    vars E_common_hepatic_C128 and E;
    vars rp_common_hepatic_C128 and r_p;
    vars rd_common_hepatic_C128 and r_d;
    vars z_common_hepatic_C128 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and hepatic_artery_proper_C130_module for
    vars l_hepatic_artery_proper_C130 and l;
    vars E_hepatic_artery_proper_C130 and E;
    vars rp_hepatic_artery_proper_C130 and r_p;
    vars rd_hepatic_artery_proper_C130 and r_d;
    vars z_hepatic_artery_proper_C130 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C138_module for
    vars l_superior_mesenteric_T4_C138 and l;
    vars E_superior_mesenteric_T4_C138 and E;
    vars rp_superior_mesenteric_T4_C138 and r_p;
    vars rd_superior_mesenteric_T4_C138 and r_d;
    vars z_superior_mesenteric_T4_C138 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C142_module for
    vars l_superior_mesenteric_T4_C142 and l;
    vars E_superior_mesenteric_T4_C142 and E;
    vars rp_superior_mesenteric_T4_C138 and r_p;
    vars rd_superior_mesenteric_T4_C138 and r_d;
    vars z_superior_mesenteric_T4_C138 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C146_module for
    vars l_superior_mesenteric_T4_C146 and l;
    vars E_superior_mesenteric_T4_C146 and E;
    vars rp_superior_mesenteric_T4_C146 and r_p;
    vars rd_superior_mesenteric_T4_C146 and r_d;
    vars z_superior_mesenteric_T4_C146 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C150_module for
    vars l_superior_mesenteric_T4_C150 and l;
    vars E_superior_mesenteric_T4_C150 and E;
    vars rp_superior_mesenteric_T4_C150 and r_p;
    vars rd_superior_mesenteric_T4_C150 and r_d;
    vars z_superior_mesenteric_T4_C150 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C154_module for
    vars l_superior_mesenteric_T4_C154 and l;
    vars E_superior_mesenteric_T4_C154 and E;
    vars rp_superior_mesenteric_T4_C154 and r_p;
    vars rd_superior_mesenteric_T4_C154 and r_d;
    vars z_superior_mesenteric_T4_C154 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C158_module for
    vars l_superior_mesenteric_T4_C158 and l;
    vars E_superior_mesenteric_T4_C158 and E;
    vars rd_superior_mesenteric_T4_C158 and r_d;
    vars rp_superior_mesenteric_T4_C158 and r_p;
    vars z_superior_mesenteric_T4_C158 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and renal_L166_module for
    vars l_renal_L166 and l;
    vars E_renal_L166 and E;
    vars rp_renal_L166 and r_p;
    vars rd_renal_L166 and r_d;
    vars z_renal_L166 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and renal_anterior_branch_L168_module for
    vars l_renal_anterior_branch_L168 and l;
    vars E_renal_anterior_branch_L168 and E;
    vars rp_renal_anterior_branch_L168 and r_p;
    vars rd_renal_anterior_branch_L168 and r_d;
    vars z_renal_anterior_branch_L168 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and renal_R178_module for
    vars l_renal_R178 and l;
    vars E_renal_R178 and E;
    vars rp_renal_R178 and r_p;
    vars rd_renal_R178 and r_d;
    vars z_renal_R178 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and renal_anterior_branch_R180_module for
    vars l_renal_anterior_branch_R180 and l;
    vars E_renal_anterior_branch_R180 and E;
    vars rp_renal_anterior_branch_R180 and r_p;
    vars rd_renal_anterior_branch_R180 and r_d;
    vars z_renal_anterior_branch_R180 and theta;
    vars g and g;
  enddef;
  // Lower Limbs
  def map between Parameters_Systemic and common_iliac_R216_module for
    vars l_common_iliac_R216 and l;
    vars E_common_iliac_R216 and E;
    vars rp_common_iliac_R216 and r_p;
    vars rd_common_iliac_R216 and r_d;
    vars z_common_iliac_R216 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and external_iliac_R220_module for
    vars l_external_iliac_R220 and l;
    vars E_external_iliac_R220 and E;
    vars rp_external_iliac_R220 and r_p;
    vars rd_external_iliac_R220 and r_d;
    vars z_external_iliac_R220 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and femoral_R222_module for
    vars l_femoral_R222 and l;
    vars E_femoral_R222 and E;
    vars rp_femoral_R222 and r_p;
    vars rd_femoral_R222 and r_d;
    vars z_femoral_R222 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and femoral_R226_module for
    vars l_femoral_R226 and l;
    vars E_femoral_R226 and E;
    vars rp_femoral_R226 and r_p;
    vars rd_femoral_R226 and r_d;
    vars z_femoral_R226 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and popliteal_R228_module for
    vars l_popliteal_R228 and l;
    vars E_popliteal_R228 and E;
    vars rp_popliteal_R228 and r_p;
    vars rd_popliteal_R228 and r_d;
    vars z_popliteal_R228 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and popliteal_R232_module for
    vars l_popliteal_R232 and l;
    vars E_popliteal_R232 and E;
    vars rp_popliteal_R232 and r_p;
    vars rd_popliteal_R232 and r_d;
    vars z_popliteal_R232 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and tibiofibular_trunk_R234_module for
    vars l_tibiofibular_trunk_R234 and l;
    vars E_tibiofibular_trunk_R234 and E;
    vars rp_tibiofibular_trunk_R234 and r_p;
    vars rd_tibiofibular_trunk_R234 and r_d;
    vars z_tibiofibular_trunk_R234 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and common_iliac_L194_module for
    vars l_common_iliac_L194 and l;
    vars E_common_iliac_L194 and E;
    vars rp_common_iliac_L194 and r_p;
    vars rd_common_iliac_L194 and r_d;
    vars z_common_iliac_L194 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and external_iliac_L198_module for
    vars l_external_iliac_L198 and l;
    vars E_external_iliac_L198 and E;
    vars rp_external_iliac_L198 and r_p;
    vars rd_external_iliac_L198 and r_d;
    vars z_external_iliac_L198 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and femoral_L200_module for
    vars l_femoral_L200 and l;
    vars E_femoral_L200 and E;
    vars rp_femoral_L200 and r_p;
    vars rd_femoral_L200 and r_d;
    vars z_femoral_L200 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and femoral_L204_module for
    vars l_femoral_L204 and l;
    vars E_femoral_L204 and E;
    vars rp_femoral_L204 and r_p;
    vars rd_femoral_L204 and r_d;
    vars z_femoral_L204 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and popliteal_L206_module for
    vars l_popliteal_L206 and l;
    vars E_popliteal_L206 and E;
    vars rp_popliteal_L206 and r_p;
    vars rd_popliteal_L206 and r_d;
    vars z_popliteal_L206 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and popliteal_L210_module for
    vars l_popliteal_L210 and l;
    vars E_popliteal_L210 and E;
    vars rp_popliteal_L210 and r_p;
    vars rd_popliteal_L210 and r_d;
    vars z_popliteal_L210 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and tibiofibular_trunk_L212_module for
    vars l_tibiofibular_trunk_L212 and l;
    vars E_tibiofibular_trunk_L212 and E;
    vars rp_tibiofibular_trunk_L212 and r_p;
    vars rd_tibiofibular_trunk_L212 and r_d;
    vars z_tibiofibular_trunk_L212 and theta;
    vars g and g;
  enddef;
  // Upper Limbs
  def map between Parameters_Systemic and subclavian_R28_module for
    vars l_subclavian_R28 and l;
    vars E_subclavian_R28 and E;
    vars rp_subclavian_R28 and r_p;
    vars rd_subclavian_R28 and r_d;
    vars z_subclavian_R28 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and subclavian_R30_module for
    vars l_subclavian_R30 and l;
    vars E_subclavian_R30 and E;
    vars rp_subclavian_R30 and r_p;
    vars rd_subclavian_R30 and r_d;
    vars z_subclavian_R30 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and axillary_R32_module for
    vars l_axillary_R32 and l;
    vars E_axillary_R32 and E;
    vars rp_axillary_R32 and r_p;
    vars rd_axillary_R32 and r_d;
    vars z_axillary_R32 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and brachial_R34_module for
    vars l_brachial_R34 and l;
    vars E_brachial_R34 and E;
    vars rp_brachial_R34 and r_p;
    vars rd_brachial_R34 and r_d;
    vars z_brachial_R34 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and ulnar_T2_R36_module for
    vars l_ulnar_T2_R36 and l;
    vars E_ulnar_T2_R36 and E;
    vars rp_ulnar_T2_R36 and r_p;
    vars rd_ulnar_T2_R36 and r_d;
    vars z_ulnar_T2_R36 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and common_interosseous_R38_module for
    vars l_common_interosseous_R38 and l;
    vars E_common_interosseous_R38 and E;
    vars rp_common_interosseous_R38 and r_p;
    vars rd_common_interosseous_R38 and r_d;
    vars z_common_interosseous_R38 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and subclavian_L66_module for
    vars l_subclavian_L66 and l;
    vars E_subclavian_L66 and E;
    vars rp_subclavian_L66 and r_p;
    vars rd_subclavian_L66 and r_d;
    vars z_subclavian_L66 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and subclavian_L78_module for
    vars l_subclavian_L78 and l;
    vars E_subclavian_L78 and E;
    vars rp_subclavian_L78 and r_p;
    vars rd_subclavian_L78 and r_d;
    vars z_subclavian_L78 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and axillary_L80_module for
    vars l_axillary_L80 and l;
    vars E_axillary_L80 and E;
    vars rp_axillary_L80 and r_p;
    vars rd_axillary_L80 and r_d;
    vars z_axillary_L80 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and brachial_L82_module for
    vars l_brachial_L82 and l;
    vars E_brachial_L82 and E;
    vars rp_brachial_L82 and r_p;
    vars rd_brachial_L82 and r_d;
    vars z_brachial_L82 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and ulnar_T2_L84_module for
    vars l_ulnar_T2_L84 and l;
    vars E_ulnar_T2_L84 and E;
    vars rp_ulnar_T2_L84 and r_p;
    vars rd_ulnar_T2_L84 and r_d;
    vars z_ulnar_T2_L84 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and common_interosseous_L86_module for
    vars l_common_interosseous_L86 and l;
    vars E_common_interosseous_L86 and E;
    vars rp_common_interosseous_L86 and r_p;
    vars rd_common_interosseous_L86 and r_d;
    vars z_common_interosseous_L86 and theta;
    vars g and g;
  enddef;
  // Head
  def map between Parameters_Systemic and common_carotid_R6_module for
    vars l_common_carotid_R6 and l;
    vars E_common_carotid_R6 and E;
    vars rp_common_carotid_R6 and r_p;
    vars rd_common_carotid_R6 and r_d;
    vars z_common_carotid_R6 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_R8_module for
    vars l_internal_carotid_R8 and l;
    vars E_internal_carotid_R8 and E;
    vars R_T_internal_carotid_R8 and R_T;
    vars C_T_internal_carotid_R8 and C_T;
    vars rp_internal_carotid_R8 and r_p;
    vars rd_internal_carotid_R8 and r_d;
    vars z_internal_carotid_R8 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and common_carotid_L48_module for
    vars l_common_carotid_L48 and l;
    vars E_common_carotid_L48 and E;
    vars rp_common_carotid_L48 and r_p;
    vars rd_common_carotid_L48 and r_d;
    vars z_common_carotid_L48 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_L50_module for
    vars l_internal_carotid_L50 and l;
    vars E_internal_carotid_L50 and E;
    vars R_T_internal_carotid_L50 and R_T;
    vars C_T_internal_carotid_L50 and C_T;
    vars rp_internal_carotid_L50 and r_p;
    vars rd_internal_carotid_L50 and r_d;
    vars z_internal_carotid_L50 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and vertebral_L2_module for
    vars l_vertebral_L2 and l;
    vars E_vertebral_L2 and E;
    vars R_T_vertebral_L2 and R_T;
    vars C_T_vertebral_L2 and C_T;
    vars rp_vertebral_L2 and r_p;
    vars rd_vertebral_L2 and r_d;
    vars z_vertebral_L2 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and vertebral_R272_module for
    vars l_vertebral_R272 and l;
    vars E_vertebral_R272 and E;
    vars R_T_vertebral_R272 and R_T;
    vars C_T_vertebral_R272 and C_T;
    vars rp_vertebral_R272 and r_p;
    vars rd_vertebral_R272 and r_d;
    vars z_vertebral_R272 and theta;
    vars g and g;
  enddef;
  // Terminal
  def map between Parameters_Systemic and posterior_intercostal_T1_R98_module for
    vars l_posterior_intercostal_T1_R98 and l;
    vars E_posterior_intercostal_T1_R98 and E;
    vars R_T_posterior_intercostal_T1_R98 and R_T;
    vars C_T_posterior_intercostal_T1_R98 and C_T;
    vars rp_posterior_intercostal_T1_R98 and r_p;
    vars rd_posterior_intercostal_T1_R98 and r_d;
    vars z_posterior_intercostal_T1_R98 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and posterior_intercostal_T1_L102_module for
    vars l_posterior_intercostal_T1_L102 and l;
    vars E_posterior_intercostal_T1_L102 and E;
    vars R_T_posterior_intercostal_T1_L102 and R_T;
    vars C_T_posterior_intercostal_T1_L102 and C_T;
    vars rp_posterior_intercostal_T1_L102 and r_p;
    vars rd_posterior_intercostal_T1_L102 and r_d;
    vars z_posterior_intercostal_T1_L102 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and posterior_intercostal_T2_R106_module for
    vars l_posterior_intercostal_T2_R106 and l;
    vars E_posterior_intercostal_T2_R106 and E;
    vars R_T_posterior_intercostal_T2_R106 and R_T;
    vars C_T_posterior_intercostal_T2_R106 and C_T;
    vars rp_posterior_intercostal_T2_R106 and r_p;
    vars rd_posterior_intercostal_T2_R106 and r_d;
    vars z_posterior_intercostal_T2_R106 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and posterior_intercostal_T2_L110_module for
    vars l_posterior_intercostal_T2_L110 and l;
    vars E_posterior_intercostal_T2_L110 and E;
    vars R_T_posterior_intercostal_T2_L110 and R_T;
    vars C_T_posterior_intercostal_T2_L110 and C_T;
    vars rp_posterior_intercostal_T2_L110 and r_p;
    vars rd_posterior_intercostal_T2_L110 and r_d;
    vars z_posterior_intercostal_T2_L110 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and left_gastric_T3_C120_module for
    vars l_left_gastric_T3_C120 and l;
    vars E_left_gastric_T3_C120 and E;
    vars R_T_left_gastric_T3_C120 and R_T;
    vars C_T_left_gastric_T3_C120 and C_T;
    vars rp_left_gastric_T3_C120 and r_p;
    vars rd_left_gastric_T3_C120 and r_d;
    vars z_left_gastric_T3_C120 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and dorsal_pancreatic_T1_C124_module for
    vars l_dorsal_pancreatic_T1_C124 and l;
    vars E_dorsal_pancreatic_T1_C124 and E;
    vars R_T_dorsal_pancreatic_T1_C124 and R_T;
    vars C_T_dorsal_pancreatic_T1_C124 and C_T;
    vars rp_dorsal_pancreatic_T1_C124 and r_p;
    vars rd_dorsal_pancreatic_T1_C124 and r_d;
    vars z_dorsal_pancreatic_T1_C124 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and splenic_T2_C126_module for
    vars l_splenic_T2_C126 and l;
    vars E_splenic_T2_C126 and E;
    vars R_T_splenic_T2_C126 and R_T;
    vars C_T_splenic_T2_C126 and C_T;
    vars rp_splenic_T2_C126 and r_p;
    vars rd_splenic_T2_C126 and r_d;
    vars z_splenic_T2_C126 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and hepatic_artery_proper_left_branch_C132_module for
    vars l_hepatic_artery_proper_left_branch_C132 and l;
    vars E_hepatic_artery_proper_left_branch_C132 and E;
    vars R_T_hepatic_artery_proper_left_branch_C132 and R_T;
    vars C_T_hepatic_artery_proper_left_branch_C132 and C_T;
    vars rp_hepatic_artery_proper_left_branch_C132 and r_p;
    vars rd_hepatic_artery_proper_left_branch_C132 and r_d;
    vars z_hepatic_artery_proper_left_branch_C132 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and hepatic_artery_proper_right_branch_C134_module for
    vars l_hepatic_artery_proper_right_branch_C134 and l;
    vars E_hepatic_artery_proper_right_branch_C134 and E;
    vars R_T_hepatic_artery_proper_right_branch_C134 and R_T;
    vars C_T_hepatic_artery_proper_right_branch_C134 and C_T;
    vars rp_hepatic_artery_proper_right_branch_C134 and r_p;
    vars rd_hepatic_artery_proper_right_branch_C134 and r_d;
    vars z_hepatic_artery_proper_right_branch_C134 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and middle_colic_T8_C140_module for
    vars l_middle_colic_T8_C140 and l;
    vars E_middle_colic_T8_C140 and E;
    vars R_T_middle_colic_T8_C140 and R_T;
    vars C_T_middle_colic_T8_C140 and C_T;
    vars rp_middle_colic_T8_C140 and r_p;
    vars rd_middle_colic_T8_C140 and r_d;
    vars z_middle_colic_T8_C140 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and jejunal_3_T10_C144_module for
    vars l_jejunal_3_T10_C144 and l;
    vars E_jejunal_3_T10_C144 and E;
    vars R_T_jejunal_3_T10_C144 and R_T;
    vars C_T_jejunal_3_T10_C144 and C_T;
    vars rp_jejunal_3_T10_C144 and r_p;
    vars rd_jejunal_3_T10_C144 and r_d;
    vars z_jejunal_3_T10_C144 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and jejunal_6_T11_C148_module for
    vars l_jejunal_6_T11_C148 and l;
    vars E_jejunal_6_T11_C148 and E;
    vars R_T_jejunal_6_T11_C148 and R_T;
    vars C_T_jejunal_6_T11_C148 and C_T;
    vars rp_jejunal_6_T11_C148 and r_p;
    vars rd_jejunal_6_T11_C148 and r_d;
    vars z_jejunal_6_T11_C148 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and ileocolic_T9_C152_module for
    vars l_ileocolic_T9_C152 and l;
    vars E_ileocolic_T9_C152 and E;
    vars R_T_ileocolic_T9_C152 and R_T;
    vars C_T_ileocolic_T9_C152 and C_T;
    vars rp_ileocolic_T9_C152 and r_p;
    vars rd_ileocolic_T9_C152 and r_d;
    vars z_ileocolic_T9_C152 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and ileal_4_T12_C156_module for
    vars l_ileal_4_T12_C156 and l;
    vars E_ileal_4_T12_C156 and E;
    vars R_T_ileal_4_T12_C156 and R_T;
    vars C_T_ileal_4_T12_C156 and C_T;
    vars rp_ileal_4_T12_C156 and r_p;
    vars rd_ileal_4_T12_C156 and r_d;
    vars z_ileal_4_T12_C156 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and ileal_6_T13_C160_module for
    vars l_ileal_6_T13_C160 and l;
    vars E_ileal_6_T13_C160 and E;
    vars R_T_ileal_6_T13_C160 and R_T;
    vars C_T_ileal_6_T13_C160 and C_T;
    vars rp_ileal_6_T13_C160 and r_p;
    vars rd_ileal_6_T13_C160 and r_d;
    vars z_ileal_6_T13_C160 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C162_module for
    vars l_superior_mesenteric_T4_C162 and l;
    vars E_superior_mesenteric_T4_C162 and E;
    vars R_T_superior_mesenteric_T4_C162 and R_T;
    vars C_T_superior_mesenteric_T4_C162 and C_T;
    vars rp_superior_mesenteric_T4_C162 and r_p;
    vars rd_superior_mesenteric_T4_C162 and r_d;
    vars z_superior_mesenteric_T4_C162 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and inferior_segmental_T5_L170_module for
    vars l_inferior_segmental_T5_L170 and l;
    vars E_inferior_segmental_T5_L170 and E;
    vars R_T_inferior_segmental_T5_L170 and R_T;
    vars C_T_inferior_segmental_T5_L170 and C_T;
    vars rp_inferior_segmental_T5_L170 and r_p;
    vars rd_inferior_segmental_T5_L170 and r_d;
    vars z_inferior_segmental_T5_L170 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and superior_segmental_T4_L172_module for
    vars l_superior_segmental_T4_L172 and l;
    vars E_superior_segmental_T4_L172 and E;
    vars R_T_superior_segmental_T4_L172 and R_T;
    vars C_T_superior_segmental_T4_L172 and C_T;
    vars rp_superior_segmental_T4_L172 and r_p;
    vars rd_superior_segmental_T4_L172 and r_d;
    vars z_superior_segmental_T4_L172 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and renal_posterior_branch_T3_L174_module for
    vars l_renal_posterior_branch_T3_L174 and l;
    vars E_renal_posterior_branch_T3_L174 and E;
    vars R_T_renal_posterior_branch_T3_L174 and R_T;
    vars C_T_renal_posterior_branch_T3_L174 and C_T;
    vars rp_renal_posterior_branch_T3_L174 and r_p;
    vars rd_renal_posterior_branch_T3_L174 and r_d;
    vars z_renal_posterior_branch_T3_L174 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and superior_segmental_T4_R182_module for
    vars l_superior_segmental_T4_R182 and l;
    vars E_superior_segmental_T4_R182 and E;
    vars R_T_superior_segmental_T4_R182 and R_T;
    vars C_T_superior_segmental_T4_R182 and C_T;
    vars rp_superior_segmental_T4_R182 and r_p;
    vars rd_superior_segmental_T4_R182 and r_d;
    vars z_superior_segmental_T4_R182 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and inferior_segmental_T5_R184_module for
    vars l_inferior_segmental_T5_R184 and l;
    vars E_inferior_segmental_T5_R184 and E;
    vars R_T_inferior_segmental_T5_R184 and R_T;
    vars C_T_inferior_segmental_T5_R184 and C_T;
    vars rp_inferior_segmental_T5_R184 and r_p;
    vars rd_inferior_segmental_T5_R184 and r_d;
    vars z_inferior_segmental_T5_R184 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and renal_posterior_branch_T3_R186_module for
    vars l_renal_posterior_branch_T3_R186 and l;
    vars E_renal_posterior_branch_T3_R186 and E;
    vars R_T_renal_posterior_branch_T3_R186 and R_T;
    vars C_T_renal_posterior_branch_T3_R186 and C_T;
    vars rp_renal_posterior_branch_T3_R186 and r_p;
    vars rd_renal_posterior_branch_T3_R186 and r_d;
    vars z_renal_posterior_branch_T3_R186 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and inferior_mesenteric_T5_C190_module for
    vars l_inferior_mesenteric_T5_C190 and l;
    vars E_inferior_mesenteric_T5_C190 and E;
    vars R_T_inferior_mesenteric_T5_C190 and R_T;
    vars C_T_inferior_mesenteric_T5_C190 and C_T;
    vars rp_inferior_mesenteric_T5_C190 and r_p;
    vars rd_inferior_mesenteric_T5_C190 and r_d;
    vars z_inferior_mesenteric_T5_C190 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and internal_iliac_T1_R218_module for
    vars l_internal_iliac_T1_R218 and l;
    vars E_internal_iliac_T1_R218 and E;
    vars R_T_internal_iliac_T1_R218 and R_T;
    vars C_T_internal_iliac_T1_R218 and C_T;
    vars rp_internal_iliac_T1_R218 and r_p;
    vars rd_internal_iliac_T1_R218 and r_d;
    vars z_internal_iliac_T1_R218 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and profundus_T2_R224_module for
    vars l_profundus_T2_R224 and l;
    vars E_profundus_T2_R224 and E;
    vars R_T_profundus_T2_R224 and R_T;
    vars C_T_profundus_T2_R224 and C_T;
    vars rp_profundus_T2_R224 and r_p;
    vars rd_profundus_T2_R224 and r_d;
    vars z_profundus_T2_R224 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and anterior_tibial_T3_R230_module for
    vars l_anterior_tibial_T3_R230 and l;
    vars E_anterior_tibial_T3_R230 and E;
    vars R_T_anterior_tibial_T3_R230 and R_T;
    vars C_T_anterior_tibial_T3_R230 and C_T;
    vars rp_anterior_tibial_T3_R230 and r_p;
    vars rd_anterior_tibial_T3_R230 and r_d;
    vars z_anterior_tibial_T3_R230 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and posterior_tibial_T4_R236_module for
    vars l_posterior_tibial_T4_R236 and l;
    vars E_posterior_tibial_T4_R236 and E;
    vars R_T_posterior_tibial_T4_R236 and R_T;
    vars C_T_posterior_tibial_T4_R236 and C_T;
    vars rp_posterior_tibial_T4_R236 and r_p;
    vars rd_posterior_tibial_T4_R236 and r_d;
    vars z_posterior_tibial_T4_R236 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and internal_iliac_T1_L196_module for
    vars l_internal_iliac_T1_L196 and l;
    vars E_internal_iliac_T1_L196 and E;
    vars R_T_internal_iliac_T1_L196 and R_T;
    vars C_T_internal_iliac_T1_L196 and C_T;
    vars rp_internal_iliac_T1_L196 and r_p;
    vars rd_internal_iliac_T1_L196 and r_d;
    vars z_internal_iliac_T1_L196 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and profundus_T2_L202_module for
    vars l_profundus_T2_L202 and l;
    vars E_profundus_T2_L202 and E;
    vars R_T_profundus_T2_L202 and R_T;
    vars C_T_profundus_T2_L202 and C_T;
    vars rp_profundus_T2_L202 and r_p;
    vars rd_profundus_T2_L202 and r_d;
    vars z_profundus_T2_L202 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and anterior_tibial_T3_L208_module for
    vars l_anterior_tibial_T3_L208 and l;
    vars E_anterior_tibial_T3_L208 and E;
    vars R_T_anterior_tibial_T3_L208 and R_T;
    vars C_T_anterior_tibial_T3_L208 and C_T;
    vars rp_anterior_tibial_T3_L208 and r_p;
    vars rd_anterior_tibial_T3_L208 and r_d;
    vars z_anterior_tibial_T3_L208 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and posterior_tibial_T4_L214_module for
    vars l_posterior_tibial_T4_L214 and l;
    vars E_posterior_tibial_T4_L214 and E;
    vars R_T_posterior_tibial_T4_L214 and R_T;
    vars C_T_posterior_tibial_T4_L214 and C_T;
    vars rp_posterior_tibial_T4_L214 and r_p;
    vars rd_posterior_tibial_T4_L214 and r_d;
    vars z_posterior_tibial_T4_L214 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and posterior_interosseous_T3_R40_module for
    vars l_posterior_interosseous_T3_R40 and l;
    vars E_posterior_interosseous_T3_R40 and E;
    vars R_T_posterior_interosseous_T3_R40 and R_T;
    vars C_T_posterior_interosseous_T3_R40 and C_T;
    vars rd_posterior_interosseous_T3_R40 and r_d;
    vars rp_posterior_interosseous_T3_R40 and r_p;
    vars z_posterior_interosseous_T3_R40 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and ulnar_T2_R42_module for
    vars l_ulnar_T2_R42 and l;
    vars E_ulnar_T2_R42 and E;
    vars R_T_ulnar_T2_R42 and R_T;
    vars C_T_ulnar_T2_R42 and C_T;
    vars rp_ulnar_T2_R42 and r_p;
    vars rd_ulnar_T2_R42 and r_d;
    vars z_ulnar_T2_R42 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and radial_T1_R44_module for
    vars l_radial_T1_R44 and l;
    vars E_radial_T1_R44 and E;
    vars R_T_radial_T1_R44 and R_T;
    vars C_T_radial_T1_R44 and C_T;
    vars rp_radial_T1_R44 and r_p;
    vars rd_radial_T1_R44 and r_d;
    vars z_radial_T1_R44 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and posterior_interosseous_T3_L88_module for
    vars l_posterior_interosseous_T3_L88 and l;
    vars E_posterior_interosseous_T3_L88 and E;
    vars R_T_posterior_interosseous_T3_L88 and R_T;
    vars C_T_posterior_interosseous_T3_L88 and C_T;
    vars rp_posterior_interosseous_T3_L88 and r_p;
    vars rd_posterior_interosseous_T3_L88 and r_d;
    vars z_posterior_interosseous_T3_L88 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and ulnar_T2_L90_module for
    vars l_ulnar_T2_L90 and l;
    vars E_ulnar_T2_L90 and E;
    vars R_T_ulnar_T2_L90 and R_T;
    vars C_T_ulnar_T2_L90 and C_T;
    vars rp_ulnar_T2_L90 and r_p;
    vars rd_ulnar_T2_L90 and r_d;
    vars z_ulnar_T2_L90 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and radial_T1_L92_module for
    vars l_radial_T1_L92 and l;
    vars E_radial_T1_L92 and E;
    vars R_T_radial_T1_L92 and R_T;
    vars C_T_radial_T1_L92 and C_T;
    vars rp_radial_T1_L92 and r_p;
    vars rd_radial_T1_L92 and r_d;
    vars z_radial_T1_L92 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and external_carotid_T2_R26_module for
    vars l_external_carotid_T2_R26 and l;
    vars E_external_carotid_T2_R26 and E;
    vars R_T_external_carotid_T2_R26 and R_T;
    vars C_T_external_carotid_T2_R26 and C_T;
    vars rp_external_carotid_T2_R26 and r_p;
    vars rd_external_carotid_T2_R26 and r_d;
    vars z_external_carotid_T2_R26 and theta;
    vars g and g;
  enddef;
  def map between Parameters_Systemic and external_carotid_T2_L62_module for
    vars l_external_carotid_T2_L62 and l;
    vars E_external_carotid_T2_L62 and E;
    vars R_T_external_carotid_T2_L62 and R_T;
    vars C_T_external_carotid_T2_L62 and C_T;
    vars rp_external_carotid_T2_L62 and r_p;
    vars rd_external_carotid_T2_L62 and r_d;
    vars z_external_carotid_T2_L62 and theta;
    vars g and g;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// Time Mapping /////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta
  def map between Systemic and ascending_aorta_C0_module for
    vars u_root and u_C;
    vars v_aov and v_in;
    vars t and t;
  enddef;
  def map between Systemic and aortic_arch_C2_module for
    vars t and t;
  enddef;
  def map between Systemic and brachiocephalic_trunk_C4_module for
    vars t and t;
  enddef;
  def map between Systemic and aortic_arch_C46_module for
    vars t and t;
  enddef;
  def map between Systemic and aortic_arch_C64_module for
    vars t and t;
  enddef;
  def map between Systemic and aortic_arch_C94_module for
    vars t and t;
  enddef;
  def map between Systemic and thoracic_aorta_C96_module for
    vars t and t;
  enddef;
  def map between Systemic and thoracic_aorta_C100_module for
    vars t and t;
  enddef;
  def map between Systemic and thoracic_aorta_C104_module for
    vars t and t;
  enddef;
  def map between Systemic and thoracic_aorta_C108_module for
    vars t and t;
  enddef;
  def map between Systemic and thoracic_aorta_C112_module for
    vars t and t;
  enddef;
  def map between Systemic and abdominal_aorta_C114_module for
    vars t and t;
  enddef;
  def map between Systemic and abdominal_aorta_C136_module for
    vars t and t;
  enddef;
  def map between Systemic and abdominal_aorta_C164_module for
    vars t and t;
  enddef;
  def map between Systemic and abdominal_aorta_C176_module for
    vars t and t;
  enddef;
  def map between Systemic and abdominal_aorta_C188_module for
    vars t and t;
  enddef;
  def map between Systemic and abdominal_aorta_C192_module for
    vars t and t;
  enddef;
  // Trunk
  def map between Systemic and celiac_trunk_C116_module for
    vars t and t;
  enddef;
  def map between Systemic and splenic_T2_C118_module for
    vars t and t;
  enddef;
  def map between Systemic and splenic_T2_C122_module for
    vars t and t;
  enddef;
  def map between Systemic and common_hepatic_C128_module for
    vars t and t;
  enddef;
  def map between Systemic and hepatic_artery_proper_C130_module for
    vars t and t;
  enddef;
  def map between Systemic and superior_mesenteric_T4_C138_module for
    vars t and t;
  enddef;
  def map between Systemic and superior_mesenteric_T4_C142_module for
    vars t and t;
  enddef;
  def map between Systemic and superior_mesenteric_T4_C146_module for
    vars t and t;
  enddef;
  def map between Systemic and superior_mesenteric_T4_C150_module for
    vars t and t;
  enddef;
  def map between Systemic and superior_mesenteric_T4_C154_module for
    vars t and t;
  enddef;
  def map between Systemic and superior_mesenteric_T4_C158_module for
    vars t and t;
  enddef;
  def map between Systemic and renal_L166_module for
    vars t and t;
  enddef;
  def map between Systemic and renal_anterior_branch_L168_module for
    vars t and t;
  enddef;
  def map between Systemic and renal_R178_module for
    vars t and t;
  enddef;
  def map between Systemic and renal_anterior_branch_R180_module for
    vars t and t;
  enddef;
  // Lower Limbs
  def map between Systemic and common_iliac_R216_module for
    vars t and t;
  enddef;
  def map between Systemic and external_iliac_R220_module for
    vars t and t;
  enddef;
  def map between Systemic and femoral_R222_module for
    vars t and t;
  enddef;
  def map between Systemic and femoral_R226_module for
    vars t and t;
  enddef;
  def map between Systemic and popliteal_R228_module for
    vars t and t;
  enddef;
  def map between Systemic and popliteal_R232_module for
    vars t and t;
  enddef;
  def map between Systemic and tibiofibular_trunk_R234_module for
    vars t and t;
  enddef;
  def map between Systemic and common_iliac_L194_module for
    vars t and t;
  enddef;
  def map between Systemic and external_iliac_L198_module for
    vars t and t;
  enddef;
  def map between Systemic and femoral_L200_module for
    vars t and t;
  enddef;
  def map between Systemic and femoral_L204_module for
    vars t and t;
  enddef;
  def map between Systemic and popliteal_L206_module for
    vars t and t;
  enddef;
  def map between Systemic and popliteal_L210_module for
    vars t and t;
  enddef;
  def map between Systemic and tibiofibular_trunk_L212_module for
    vars t and t;
  enddef;
  // Upper Limbs
  def map between Systemic and subclavian_R28_module for
    vars t and t;
  enddef;
  def map between Systemic and subclavian_R30_module for
    vars t and t;
  enddef;
  def map between Systemic and axillary_R32_module for
    vars t and t;
  enddef;
  def map between Systemic and brachial_R34_module for
    vars t and t;
  enddef;
  def map between Systemic and ulnar_T2_R36_module for
    vars t and t;
  enddef;
  def map between Systemic and common_interosseous_R38_module for
    vars t and t;
  enddef;
  def map between Systemic and subclavian_L66_module for
    vars t and t;
  enddef;
  def map between Systemic and subclavian_L78_module for
    vars t and t;
  enddef;
  def map between Systemic and axillary_L80_module for
    vars t and t;
  enddef;
  def map between Systemic and brachial_L82_module for
    vars t and t;
  enddef;
  def map between Systemic and ulnar_T2_L84_module for
    vars t and t;
  enddef;
  def map between Systemic and common_interosseous_L86_module for
    vars t and t;
  enddef;
  // Head
  def map between Systemic and common_carotid_R6_module for
    vars t and t;
  enddef;
  def map between Systemic and common_carotid_L48_module for
    vars t and t;
  enddef;

  def group as encapsulation for
    comp Heart incl
      comp Parameters_Heart;
    endcomp;
  enddef;

  def group as encapsulation for
    comp Pulmonary incl
      comp Parameters_Pulmonary;
    endcomp;
  enddef;

  def group as encapsulation for
    comp Systemic incl
      comp Parameters_Systemic;
      comp ascending_aorta_C0_module;
      comp aortic_arch_C2_module;
      comp brachiocephalic_trunk_C4_module;
      comp aortic_arch_C46_module;
      comp aortic_arch_C64_module;
      comp aortic_arch_C94_module;
      comp thoracic_aorta_C96_module;
      comp thoracic_aorta_C100_module;
      comp thoracic_aorta_C104_module;
      comp thoracic_aorta_C108_module;
      comp thoracic_aorta_C112_module;
      comp abdominal_aorta_C114_module;
      comp abdominal_aorta_C136_module;
      comp abdominal_aorta_C164_module;
      comp abdominal_aorta_C176_module;
      comp abdominal_aorta_C188_module;
      comp abdominal_aorta_C192_module;
      comp posterior_intercostal_T1_R98_module;
      comp posterior_intercostal_T1_L102_module;
      comp posterior_intercostal_T2_R106_module;
      comp posterior_intercostal_T2_L110_module;
      comp celiac_trunk_C116_module;
      comp splenic_T2_C118_module;
      comp left_gastric_T3_C120_module;
      comp splenic_T2_C122_module;
      comp dorsal_pancreatic_T1_C124_module;
      comp splenic_T2_C126_module;
      comp common_hepatic_C128_module;
      comp hepatic_artery_proper_C130_module;
      comp hepatic_artery_proper_left_branch_C132_module;
      comp hepatic_artery_proper_right_branch_C134_module;
      comp superior_mesenteric_T4_C138_module;
      comp middle_colic_T8_C140_module;
      comp superior_mesenteric_T4_C142_module;
      comp jejunal_3_T10_C144_module;
      comp superior_mesenteric_T4_C146_module;
      comp jejunal_6_T11_C148_module;
      comp superior_mesenteric_T4_C150_module;
      comp ileocolic_T9_C152_module;
      comp superior_mesenteric_T4_C154_module;
      comp ileal_4_T12_C156_module;
      comp superior_mesenteric_T4_C158_module;
      comp ileal_6_T13_C160_module;
      comp superior_mesenteric_T4_C162_module;
      comp renal_L166_module;
      comp renal_anterior_branch_L168_module;
      comp inferior_segmental_T5_L170_module;
      comp superior_segmental_T4_L172_module;
      comp renal_posterior_branch_T3_L174_module;
      comp renal_R178_module;
      comp renal_anterior_branch_R180_module;
      comp superior_segmental_T4_R182_module;
      comp inferior_segmental_T5_R184_module;
      comp renal_posterior_branch_T3_R186_module;
      comp inferior_mesenteric_T5_C190_module;
      comp common_iliac_R216_module;
      comp internal_iliac_T1_R218_module;
      comp external_iliac_R220_module;
      comp femoral_R222_module;
      comp profundus_T2_R224_module;
      comp femoral_R226_module;
      comp popliteal_R228_module;
      comp anterior_tibial_T3_R230_module;
      comp popliteal_R232_module;
      comp tibiofibular_trunk_R234_module;
      comp posterior_tibial_T4_R236_module;
      comp common_iliac_L194_module;
      comp internal_iliac_T1_L196_module;
      comp external_iliac_L198_module;
      comp femoral_L200_module;
      comp profundus_T2_L202_module;
      comp femoral_L204_module;
      comp popliteal_L206_module;
      comp anterior_tibial_T3_L208_module;
      comp popliteal_L210_module;
      comp tibiofibular_trunk_L212_module;
      comp posterior_tibial_T4_L214_module;
      comp subclavian_R28_module;
      comp subclavian_R30_module;
      comp axillary_R32_module;
      comp brachial_R34_module;
      comp ulnar_T2_R36_module;
      comp common_interosseous_R38_module;
      comp posterior_interosseous_T3_R40_module;
      comp ulnar_T2_R42_module;
      comp radial_T1_R44_module;
      comp subclavian_L66_module;
      comp subclavian_L78_module;
      comp axillary_L80_module;
      comp brachial_L82_module;
      comp ulnar_T2_L84_module;
      comp common_interosseous_L86_module;
      comp posterior_interosseous_T3_L88_module;
      comp ulnar_T2_L90_module;
      comp radial_T1_L92_module;
      comp common_carotid_R6_module;
      comp internal_carotid_R8_module;
      comp external_carotid_T2_R26_module;
      comp common_carotid_L48_module;
      comp internal_carotid_L50_module;
      comp external_carotid_T2_L62_module;
      comp vertebral_L2_module;
      comp vertebral_R272_module;
      comp ascending_aorta_C0;
      comp aortic_arch_C2;
      comp brachiocephalic_trunk_C4;
      comp aortic_arch_C46;
      comp aortic_arch_C64;
      comp aortic_arch_C94;
      comp thoracic_aorta_C96;
      comp thoracic_aorta_C100;
      comp thoracic_aorta_C104;
      comp thoracic_aorta_C108;
      comp thoracic_aorta_C112;
      comp abdominal_aorta_C114;
      comp abdominal_aorta_C136;
      comp abdominal_aorta_C164;
      comp abdominal_aorta_C176;
      comp abdominal_aorta_C188;
      comp abdominal_aorta_C192;
      comp posterior_intercostal_T1_R98;
      comp posterior_intercostal_T1_L102;
      comp posterior_intercostal_T2_R106;
      comp posterior_intercostal_T2_L110;
      comp celiac_trunk_C116;
      comp splenic_T2_C118;
      comp left_gastric_T3_C120;
      comp splenic_T2_C122;
      comp dorsal_pancreatic_T1_C124;
      comp splenic_T2_C126;
      comp common_hepatic_C128;
      comp hepatic_artery_proper_C130;
      comp hepatic_artery_proper_left_branch_C132;
      comp hepatic_artery_proper_right_branch_C134;
      comp superior_mesenteric_T4_C138;
      comp middle_colic_T8_C140;
      comp superior_mesenteric_T4_C142;
      comp jejunal_3_T10_C144;
      comp superior_mesenteric_T4_C146;
      comp jejunal_6_T11_C148;
      comp superior_mesenteric_T4_C150;
      comp ileocolic_T9_C152;
      comp superior_mesenteric_T4_C154;
      comp ileal_4_T12_C156;
      comp superior_mesenteric_T4_C158;
      comp ileal_6_T13_C160;
      comp superior_mesenteric_T4_C162;
      comp renal_L166;
      comp renal_anterior_branch_L168;
      comp inferior_segmental_T5_L170;
      comp superior_segmental_T4_L172;
      comp renal_posterior_branch_T3_L174;
      comp renal_R178;
      comp renal_anterior_branch_R180;
      comp superior_segmental_T4_R182;
      comp inferior_segmental_T5_R184;
      comp renal_posterior_branch_T3_R186;
      comp inferior_mesenteric_T5_C190;
      comp common_iliac_R216;
      comp internal_iliac_T1_R218;
      comp external_iliac_R220;
      comp femoral_R222;
      comp profundus_T2_R224;
      comp femoral_R226;
      comp popliteal_R228;
      comp anterior_tibial_T3_R230;
      comp popliteal_R232;
      comp tibiofibular_trunk_R234;
      comp posterior_tibial_T4_R236;
      comp common_iliac_L194;
      comp internal_iliac_T1_L196;
      comp external_iliac_L198;
      comp femoral_L200;
      comp profundus_T2_L202;
      comp femoral_L204;
      comp popliteal_L206;
      comp anterior_tibial_T3_L208;
      comp popliteal_L210;
      comp tibiofibular_trunk_L212;
      comp posterior_tibial_T4_L214;
      comp subclavian_R28;
      comp subclavian_R30;
      comp axillary_R32;
      comp brachial_R34;
      comp ulnar_T2_R36;
      comp common_interosseous_R38;
      comp posterior_interosseous_T3_R40;
      comp ulnar_T2_R42;
      comp radial_T1_R44;
      comp subclavian_L66;
      comp subclavian_L78;
      comp axillary_L80;
      comp brachial_L82;
      comp ulnar_T2_L84;
      comp common_interosseous_L86;
      comp posterior_interosseous_T3_L88;
      comp ulnar_T2_L90;
      comp radial_T1_L92;
      comp common_carotid_R6;
      comp internal_carotid_R8;
      comp external_carotid_T2_R26;
      comp common_carotid_L48;
      comp internal_carotid_L50;
      comp external_carotid_T2_L62;
      comp vertebral_L2;
      comp vertebral_R272;
    endcomp;
  enddef;
enddef;
